PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial6
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/discounting_tutorial6.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 5, 'future_reward': 10, 'delay': 1},
      {'reward_today': 10, 'future_reward': 20, 'delay': 2},
      {'reward_today': 15, 'future_reward': 30, 'delay': 3},
      {'reward_today': 20, 'future_reward': 40, 'delay': 4},
      {'reward_today': 25, 'future_reward': 50, 'delay': 5},
      {'reward_today': 30, 'future_reward': 60, 'delay': 6},
      {'reward_today': 35, 'future_reward': 70, 'delay': 7},
      {'reward_today': 40, 'future_reward': 80, 'delay': 8},
      {'reward_today': 45, 'future_reward': 90, 'delay': 9},
      {'reward_today': 50, 'future_reward': 100, 'delay': 10},
      {'reward_today': 55, 'future_reward': 110, 'delay': 11},
      {'reward_today': 60, 'future_reward': 120, 'delay': 12},
      {'reward_today': 65, 'future_reward': 130, 'delay': 13},
      {'reward_today': 70, 'future_reward': 140, 'delay': 14},
      {'reward_today': 75, 'future_reward': 150, 'delay': 15},
      {'reward_today': 80, 'future_reward': 160, 'delay': 16},
      {'reward_today': 85, 'future_reward': 170, 'delay': 17},
      {'reward_today': 90, 'future_reward': 180, 'delay': 18},
      {'reward_today': 95, 'future_reward': 190, 'delay': 19},
      {'reward_today': 100, 'future_reward': 200, 'delay': 20},
      {'reward_today': 105, 'future_reward': 210, 'delay': 21},
      {'reward_today': 110, 'future_reward': 220, 'delay': 22},
      {'reward_today': 115, 'future_reward': 230, 'delay': 23},
      {'reward_today': 120, 'future_reward': 240, 'delay': 24},
      {'reward_today': 125, 'future_reward': 250, 'delay': 25},
      {'reward_today': 130, 'future_reward': 260, 'delay': 26},
      {'reward_today': 135, 'future_reward': 270, 'delay': 27}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
    Routine trial
  LoopTerminator trials
